<?xml version="1.0" encoding="UTF-8" standalone="no"?>
<batch mzmine_version="4.8.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names">
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2182.mzML</file>
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2183.mzML</file>
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2184.mzML</file>
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2185.mzML</file>
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2186.mzML</file>
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2187.mzML</file>
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2188.mzML</file>
            <file>Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\HGMA_2189.mzML</file>
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        </parameter>
        <parameter name="Try vendor centroiding">true</parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files">
            <file>Y:\MA_BPA_Microbiome\Databases\SpectralLibraries\PheHex_NEG_MA_MC.msp</file>
            <file>Y:\MA_BPA_Microbiome\Databases\SpectralLibraries\PheHex_POS_MA_MC.msp</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">75.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">7.5</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" module_name="Chromatogram builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.3</min>
                <max>11.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">10000.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" module_name="Smoothing" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time width (scans)" selected="true">5</parameter>
                <parameter name="Mobility width (scans)" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" module_name="Local minimum feature resolver" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.05</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="false">
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            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.86</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>1.51</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" module_name="13C isotope filter (formerly: isotope grouper)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.04</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" module_name="Isotopic peaks finder" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" module_name="Join aligner" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Minimum aligned samples" selected="true">
            <abs>1</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">true</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule" module_name="Feature list blank subtraction" parameter_version="1">
        <parameter name="Aligned feature list" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Blank/Control raw data files" type="SPECIFIC_FILES">
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Midrun_blank_01.mzML">Midrun_blank_01.mzML</specific_file>
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Midrun_blank_02.mzML">Midrun_blank_02.mzML</specific_file>
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Midrun_blank_03.mzML">Midrun_blank_03.mzML</specific_file>
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Midrun_blank_04.mzML">Midrun_blank_04.mzML</specific_file>
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Postrunblank_01.mzML">Postrunblank_01.mzML</specific_file>
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Postrunblank_02.mzML">Postrunblank_02.mzML</specific_file>
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Prerun_blank_02.mzML">Prerun_blank_02.mzML</specific_file>
            <specific_file path="Y:\MA_BPA_Microbiome\LCMS data\HGMD_0226_MC01-92_negative\mzml\Prerun_blank_03.mzML">Prerun_blank_03.mzML</specific_file>
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        </parameter>
        <parameter name="Minimum # of detection in blanks">2</parameter>
        <parameter name="Quantification">Height</parameter>
        <parameter name="Ratio type">MAXIMUM</parameter>
        <parameter name="Fold change increase" selected="true">3.0</parameter>
        <parameter name="Keep or remove features (of rows) below fold change">REMOVE - Only keep features above fold change</parameter>
        <parameter name="Create secondary list of subtracted features">false</parameter>
        <parameter name="Suffix">subtracted</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" module_name="Feature finder (multithreaded)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum scans (data points)">2</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" module_name="Duplicate peak filter" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>7.5E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.035</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" module_name="Correlation grouping (metaCorrelate)" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.055999998</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">5.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>1</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Keep extended stats">false</parameter>
            <parameter name="Simplify for ≥ samples">250</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" module_name="Ion identity networking" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ONE FEATURE</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="34.969401" mol_formula="Cl" name="Cl" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="44.99820285" mol_formula="HCO2" name="FA" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_lipidid.annotation_modules.LipidAnnotationModule" module_name="Lipid Annotation" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Lipid classes">
            <item>Fatty Acyls</item>
            <item>Fatty acids and Conjugates</item>
            <item>FA Free fatty acids</item>
            <item>FA Oxidized fatty acids</item>
            <item>Fatty esters</item>
            <item>FAHFA Fatty acid estolides</item>
            <item>CAR Fatty acyl carnitines</item>
            <item>Fatty amides</item>
            <item>NA N-Acyl glycine</item>
            <item>Glycerolipids</item>
            <item>Monoradylglycerols</item>
            <item>MG Monoacylglycerols</item>
            <item>MG Monoalkylglycerols</item>
            <item>Diradylglycerols</item>
            <item>DG Diacylglycerols</item>
            <item>DG Alkylacylglycerols</item>
            <item>DG Dialkylglycerols</item>
            <item>Triradylglycerols</item>
            <item>TG Triacylglycerols</item>
            <item>TG Alkyldiacylglycerols</item>
            <item>Other glycerolipids</item>
            <item>DGTS Diacylglyceroltrimethylhomoserin</item>
            <item>LDGTS Monoacylglyceroltrimethylhomoserin</item>
            <item>Glycosyldiacylglycerols</item>
            <item>MGDG Monogalactosyldiacylglycerol</item>
            <item>MGMG Monogalactosylmonoacylglycerol</item>
            <item>DGDG Digalactosyldiacylglycerol</item>
            <item>SQDG Sulfoquinovosyldiacylglycerols</item>
            <item>Glycosylmonoacylglycerols</item>
            <item>SQMG Sulfoquinovosylmonoacylglycerols</item>
            <item>Glycerophospholipids</item>
            <item>Phosphatidylcholine</item>
            <item>PC Diacylglycerophosphocholines</item>
            <item>PC Alkylacylglycerophosphocholines</item>
            <item>PC Dialkylglycerophosphocholines</item>
            <item>LPC Monoacylglycerophosphocholines</item>
            <item>LPC Monoalkylglycerophosphocholines</item>
            <item>Glycerophosphoethanolamines</item>
            <item>PE Diacylglycerophosphoethanolamines</item>
            <item>PE Alkylacylglycerophosphoethanolamines</item>
            <item>PE Dialkylglycerophosphoethanolamines</item>
            <item>LPE Monoacylglycerophosphoethanolamines</item>
            <item>LPE Monoalkylglycerophosphoethanolamines</item>
            <item>LNAPE N-acyl-lysophosphatidylethanolamine</item>
            <item>Glycerophosphoserines</item>
            <item>PS Diacylglycerophosphoserines</item>
            <item>PS Alkylacylglycerophosphoserines</item>
            <item>LPS Monoacylglycerophosphoserines</item>
            <item>LPS Monoalkylglycerophosphoserines</item>
            <item>Glycerophosphoglycerols</item>
            <item>PG Diacylglycerophosphoglycerols</item>
            <item>PG Alkylacylglycerophosphoglycerols</item>
            <item>PG Dialkylglycerophosphoglycerols</item>
            <item>LPG Monoacylglycerophosphoglycerols</item>
            <item>LPG Monoalkylglycerophosphoglycerols</item>
            <item>BMP Monoacylglycerophosphomonoradylglycerols</item>
            <item>Glycerophosphoinositols</item>
            <item>PI Diacylglycerophosphoinositols</item>
            <item>PI Alkylacylglycerophosphoinositols</item>
            <item>PI Dialkylglycerophosphoinositols</item>
            <item>LPI Monoacylglycerophosphoinositols</item>
            <item>LPI Monoalkylglycerophosphoinositols</item>
            <item>Glycerophosphates</item>
            <item>PA Diacylglycerophosphates</item>
            <item>PA Alkylacylglycerophosphates</item>
            <item>LPA Monoacylglycerophosphates</item>
            <item>LPA Monoalkylglycerophosphates</item>
            <item>Cardiolipin</item>
            <item>CL Diacylglycerophosphoglycerophosphodiradylglycerols</item>
            <item>MLCL Diacylglycerophosphoglycerophosphomonoradylglycerols</item>
            <item>DLCL Monoacylglycerophosphoglycerophosphomonoradylglycerols</item>
            <item>Sphingolipids</item>
            <item>Sphingoid bases</item>
            <item>SPB Sphingosines and Sphinganines</item>
            <item>SPB Phytosphingosines and Phytosphinganines</item>
            <item>Ceramides</item>
            <item>Cer Ceramides and dihydroceramides hydroxy fatty acid</item>
            <item>CerP Ceramide-1-phosphates</item>
            <item>Cer N-acyl-4-hydroxysphinganines (phytoceramides)</item>
            <item>Cer N-acylsphingosines (ceramides) and N-acylsphinganines (dihydroceramides)</item>
            <item>Cer Phytoceramides hydroxy fatty acid</item>
            <item>Neutral glycosphingolipids</item>
            <item>Hex2Cer Dihexosylceramides</item>
            <item>Hex3Cer Trihexosylceramides</item>
            <item>HexCer Hexosylceramides</item>
            <item>HexCer Hexosylceramide hydroxy fatty acid</item>
            <item>HexCer Hexosylceramide hydroxy fatty acid phytosphingosine</item>
            <item>Phosphosphingolipids</item>
            <item>SM Ceramide Phosphocholines (Sphingomyelins)</item>
            <item>SM Oxidized Ceramide Phosphocholines (Sphingomyelins)</item>
            <item>Sterol Lipids</item>
            <item>Sterols</item>
            <item>CE Cholesterol esters</item>
        </parameter>
        <parameter name="Side chain parameters">
            <parameter name="Minimum chain length">12</parameter>
            <parameter name="Maximum chain length">26</parameter>
            <parameter name="Minimum number of DBEs">0</parameter>
            <parameter name="Maximum number of DBEs">6</parameter>
            <parameter name="Only search for even chain length">false</parameter>
        </parameter>
        <parameter name="m/z tolerance MS1 level:">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Search for lipid class specific fragments in MS/MS spectra" selected="true">
            <parameter name="Merge &amp; select fragment scans" selected_item="input_scans">
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                <module name="input_scans">
                    <parameter name="Select input scans">all_scans</parameter>
                </module>
            </parameter>
            <parameter name="m/z tolerance MS2 level:">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Explained intensity [%]:">0.6</parameter>
            <parameter name="Keep unconfirmed annotations">false</parameter>
        </parameter>
        <parameter name="Search for custom lipid class" selected="false">
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" module_name="Spectral library search" parameter_version="3">
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">single_merged_scan</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.0135</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">2</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.0067</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.0135</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">false</parameter>
        <parameter name="Minimum  matched signals">6</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Retention time tolerance" selected="true" unit="MINUTES">0.2</parameter>
            <parameter name="Retention index tolerance" selected="false"/>
            <parameter name="Skip library entries without RIs">false</parameter>
            <parameter name="CCS tolerance [%]" selected="false">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</parameter>
            <parameter name="13C deisotoping" selected="false">
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            </parameter>
            <parameter name="Min matched isotope signals" selected="false">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</parameter>
            <parameter name="Crop spectra to m/z overlap">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_spectral_networking.MainSpectralNetworkingModule" module_name="Spectral / Molecular Networking" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Algorithm" selected_item="Modified cosine">
            <module name="Modified cosine">
                <parameter name="m/z tolerance">
                    <absolutetolerance>0.002</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
                <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
                    <module name="simple_merged">
                        <parameter name="Presets">single_merged_scan</parameter>
                        <parameter name="Merging m/z tolerance">
                            <absolutetolerance>0.002</absolutetolerance>
                            <ppmtolerance>10.0</ppmtolerance>
                        </parameter>
                    </module>
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                </parameter>
                <parameter name="Max precursor m/z delta" selected="true">500.0</parameter>
                <parameter name="Minimum matched signals">4</parameter>
                <parameter name="Min cosine similarity">0.7</parameter>
                <parameter name="Signal filters">
                    <parameter name="Remove residual precursor m/z" selected="true">10.0</parameter>
                    <parameter name="Crop to top N signals">250</parameter>
                    <parameter name="Signal threshold (intensity filter)">50</parameter>
                    <parameter name="Intensity filter at &gt;N signals">0.98</parameter>
                </parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" module_name="Export all annotations to CSV file" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\data_annotations.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_network_graphml.NetworkGraphMlExportModule" module_name="Export spectral networks to graphml (FBMN/IIMN)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\mzmine_networking.graphml</current_file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.visualization.projectmetadata.io.ProjectMetadataExportModule" module_name="Project metadata export" parameter_version="1">
        <parameter name="Metadata file">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\metadata.csv</current_file>
        </parameter>
        <parameter name="Format">Default</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" module_name="Export to CSV file (modular)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\ms1-and-ms2.csv</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" module_name="Export molecular networking files (e.g., GNPS, FBMN, IIMN, MetGem)" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\data_iimn_gnps.mgf</current_file>
        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">single_merged_scan</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.002</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Intensity normalization" scientific="false">no_normalization</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" module_name="Export for SIRIUS" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\data_sirius.mgf</current_file>
        </parameter>
        <parameter name="Intensity normalization" scientific="true">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="input_scans">
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            <module name="input_scans">
                <parameter name="Select input scans">all_scans</parameter>
            </module>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.batchmode.autosave.AutoSaveBatchModule" module_name="Save current batch" parameter_version="1">
        <parameter name="Save batch to" selected="true">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\mzmine_batch.mzbatch</current_file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Keep or remove rows">Remove rows that match all criteria</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Minimum aligned samples" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">true</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" module_name="Spectral library search" parameter_version="3">
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_scans</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.0135</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.0067</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.0135</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">true</parameter>
        <parameter name="Minimum  matched signals">4</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="true">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" module_name="Export all annotations to CSV file" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\data_annotations_frag4.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Keep or remove rows">Remove rows that match all criteria</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Minimum aligned samples" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">true</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" module_name="Spectral library search" parameter_version="3">
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_scans</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.0135</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.0067</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.0135</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">true</parameter>
        <parameter name="Minimum  matched signals">2</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="true">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" module_name="Export all annotations to CSV file" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\data_annotations_frag2.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Keep or remove rows">Remove rows that match all criteria</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Minimum aligned samples" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">true</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_localcsvsearch.LocalCSVDatabaseSearchModule" module_name="Local compound database search" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Database file">
            <current_file>Y:\MA_BPA_Microbiome\Databases\SpectralLibraries\CSVs for Level 1 Matching\MA_MJM_combined_standards_PheHex_positive.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Columns">
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            <importtype column="rt" datatype="io.github.mzmine.datamodel.features.types.numbers.RTType" selected="true"/>
            <importtype column="formula" datatype="io.github.mzmine.datamodel.features.types.annotations.formula.FormulaType" selected="true"/>
            <importtype column="smiles" datatype="io.github.mzmine.datamodel.features.types.annotations.SmilesStructureType" selected="true"/>
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            <importtype column="name" datatype="io.github.mzmine.datamodel.features.types.annotations.CompoundNameType" selected="true"/>
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            <importtype column="PubChemCID" datatype="io.github.mzmine.datamodel.features.types.annotations.compounddb.PubChemIdType" selected="true"/>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0067</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="true" unit="MINUTES">0.2</parameter>
        <parameter name="Mobility time tolerance" selected="false">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</parameter>
        <parameter name="CCS tolerance (%)" selected="false">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</parameter>
        <parameter name="Use isotope matcher" selected="false">
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        </parameter>
        <parameter name="Use adducts" selected="true">
            <parameter name="Maximum charge">1</parameter>
            <parameter name="Maximum molecules/cluster">3</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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            </parameter>
        </parameter>
        <parameter name="Filter filename header" selected="false">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</parameter>
        <parameter name="Additional columns" selected="ignore"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" module_name="Export all annotations to CSV file" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\data_annotations_frag0.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Keep or remove rows">Remove rows that match all criteria</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Minimum aligned samples" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">true</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" module_name="Spectral library search" parameter_version="3">
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_scans</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.0135</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.0067</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.0135</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">true</parameter>
        <parameter name="Minimum  matched signals">6</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" module_name="Export all annotations to CSV file" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>E:\MA_BPA_Microbiome\mzmine_results\lv2_annotations.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
</batch>
